OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Signal Decimation
  Decimation factor = 64
-> Channel Selector "Frontal Lobe Selector" => #2
  Channel List = AF3;AF4;F3;F4
  Action = Select
  Channel Matching Method = Name
-> Temporal filter "Alpha Filter" => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 1
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 0.5
-> Average Script => #4
  Clock frequency (Hz) = 64
  Script = C:/Users/Alvin/Desktop/average.py
#3 -> Channel Selector "F3 Selector" => #5
  Channel List = F3
  Action = Select
  Channel Matching Method = Name
#3 -> Channel Selector "F4 Selector" => #6
  Channel List = F4
  Action = Select
  Channel Matching Method = Name
#2 -> Temporal filter "Beta Filter" => #7
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 1
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> 0xc67a01dc Average Script => #8
  Clock frequency (Hz) = 64
  Script = C:/Users/Alvin/Desktop/average.py
alpha=#4, beta=#8 -> Arousal Script => #9
  Clock frequency (Hz) = 64
  Script = C:/Users/Alvin/Desktop/arousal.py
Signal=#9 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
#7 -> Channel Selector "F3 Selector" => #11
  Channel List = F3
  Action = Select
  Channel Matching Method = Name
#7 -> Channel Selector "F4 Selector" => #12
  Channel List = F4
  Action = Select
  Channel Matching Method = Name
f3alpha=#5, f3beta=#6, f4alpha=#11, f4beta=#12 -> Valence Script => #13
  Clock frequency (Hz) = 64
  Script = C:/Users/Alvin/Desktop/valence.py
Signal=#13 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
